PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = (1024, 768)
  expName = GRTv1
  keyboardBackend = PsychToolbox
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine learning
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    SoundComponent item1
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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    SoundComponent item2
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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  Routine task
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    CodeComponent recog
      Code Type = Auto->JS
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      Begin Routine:
        d = 10.0 / np.sqrt(2)
        POS = [
            ( d,  d),
            (-d,  d),
            (-d, -d),
            ( d, -d),
        ]
        GAP = 4.2
        final_value = ['#B744A1', '#B52C95', '#B744A1', '#B52C95']
        POS_TXT = []
        POS_COL = []
        for x, y in POS:
            POS_TXT.append((x, y + GAP/2))
            POS_COL.append((x, y - GAP/2))

        orders = rng.permutation(4)   # 畫面槽位重新洗牌
        TXT = ["[bε]","[bε]","[pε]","[pε]"]
        NAMES = ['UR', 'UL', 'BL', 'BR']

        txtUL_pos = POS_TXT[orders[0]]
        colUL_pos = POS_COL[orders[0]]
        UL_col = final_value[orders[0]]
        UL_TXT = TXT[orders[0]]
        UL_quad = NAMES[orders[0]]     # 這個槽位放的內容，代表哪個象限的item

        txtUR_pos = POS_TXT[orders[1]]
        colUR_pos = POS_COL[orders[1]]
        UR_col = final_value[orders[1]]
        UR_TXT = TXT[orders[1]]
        UR_quad = NAMES[orders[1]]

        txtBL_pos = POS_TXT[orders[2]]
        colBL_pos = POS_COL[orders[2]]
        BL_col = final_value[orders[2]]
        BL_TXT = TXT[orders[2]]
        BL_quad = NAMES[orders[2]]

        txtBR_pos = POS_TXT[orders[3]]
        colBR_pos = POS_COL[orders[3]]
        BR_col = final_value[orders[3]]
        BR_TXT = TXT[orders[3]]
        BR_quad = NAMES[orders[3]]
      End Routine:
        thisExp.addData('txtBR_pos', txtBR_pos)
        thisExp.addData('colBR_pos', colBR_pos)
        thisExp.addData('BR_col', BR_col)
        thisExp.addData('BR_TXT', BR_TXT)


        thisExp.addData('txtBL_pos', txtBL_pos)
        thisExp.addData('colBL_pos', colBL_pos)
        thisExp.addData('BL_col', BL_col)
        thisExp.addData('BL_TXT', BL_TXT)

        thisExp.addData('txtUR_pos', txtUR_pos)
        thisExp.addData('colUR_pos', colUR_pos)
        thisExp.addData('UR_col', UR_col)
        thisExp.addData('UR_TXT', UR_TXT)

        thisExp.addData('txtUL_pos', txtUL_pos)
        thisExp.addData('colUL_pos', colUL_pos)
        thisExp.addData('UL_col', UL_col)
        thisExp.addData('UL_TXT', UL_TXT)

        thisExp.addData('UL_quad', UL_quad)
        thisExp.addData('UR_quad', UR_quad)
        thisExp.addData('BL_quad', BL_quad)
        thisExp.addData('BR_quad', BR_quad)
        thisExp.addData('task_orders', orders)
        KEY_TO_QUAD_IDX = {'f': 2, 'g': 1, 'h': 3, 'j': 0}
        ###之後更新RESPONAW BOX 的值

        KEY_TO_SLOT = {'f': 'BL', 'g': 'UL', 'h': 'BR', 'j': 'UR'}

        pressed_key = key_resp_2.keys   # 之後接Response Box時，改成從respond讀取
        if isinstance(pressed_key, list):
            pressed_key = pressed_key[-1] if len(pressed_key) > 0 else None

        if pressed_key in KEY_TO_SLOT:
            chosen_slot = KEY_TO_SLOT[pressed_key]          # 'UL'/'UR'/'BL'/'BR'
            slot_quad_map = {'UL': UL_quad, 'UR': UR_quad, 'BL': BL_quad, 'BR': BR_quad}
            chosen_quad_name = slot_quad_map[chosen_slot]   # 受試者選的位置，原本代表哪個象限(名稱字串,如'UR')

            # target_quad是數字index(0~3)，NAMES是對照表，換成同樣的字串格式來比較
            correct_quad_name = NAMES[target_quad]
            is_correct = (chosen_quad_name == correct_quad_name)
        else:
            chosen_slot = None
            chosen_quad_name = None
            is_correct = False

        thisExp.addData('pressed_key', pressed_key)
        thisExp.addData('chosen_slot', chosen_slot)
        thisExp.addData('chosen_quad_name', chosen_quad_name)
        thisExp.addData('correct_quad_name', correct_quad_name)
        thisExp.addData('is_correct', is_correct)
    ImageComponent BOX
      image = stimuli/box.png
      size = (6, 6)
      startVal [time (s)] = 0.0
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    ButtonBoxComponent respond
      deviceLabel = ResponseBox
      disabled = True
      discardPrevious = True
      forceEndRoutine = True
      registerOn = True
      startVal [time (s)] = 0.0
      store = first
      storeCorrect = False
      syncScreenRefresh = False
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    TextComponent UL
      letterHeight = 4
      pos [set every repeat] = txtUL_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $UL_TXT
      units = deg
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    TextComponent UR
      letterHeight = 4
      pos [set every repeat] = txtUR_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $UR_TXT
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    TextComponent BL
      color [set every repeat] = white
      colorSpace = named
      letterHeight = 4
      pos [set every repeat] = txtBL_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $BL_TXT
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    TextComponent BR
      letterHeight = 4
      pos [set every repeat] = txtBR_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $BR_TXT
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    PolygonComponent vUL
      colorSpace = hex
      fillColor [set every repeat] = $UL_col
      pos [set every repeat] = colUL_pos
      shape = rectangle
      size = [4,4]
      startVal [time (s)] = 0.0
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    PolygonComponent vUR
      fillColor [set every repeat] = $UR_col
      pos [set every repeat] = colUR_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    PolygonComponent vBL
      colorSpace = hex
      fillColor [set every repeat] = $BL_col
      pos [set every repeat] = colBL_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    PolygonComponent vBR
      colorSpace = hex
      fillColor [set every repeat] = $BR_col
      pos [set every repeat] = colBR_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','g','h','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        print(f"win size: {win.size}, aspect: {win.size[0]/win.size[1]:.3f}")
        print(f"x edge in height units: ±{win.size[0]/win.size[1]/2:.3f}")
      Begin Routine:
        cue_valid = rng.integers(2)
        decide_pos = rng.integers(4)

        target_quad = decide_pos        # target 象限
        pool = []
        for q in range(4):
            if q != target_quad:
                pool.append(q)

        if cue_valid == 1:
            cue_idx = target_quad
        else:
            cue_idx = pool[rng.integers(3)]


        cue_posx, cue_posy = POS[cue_idx]
        target_posx, target_posy = POS[target_quad]
        cue_color = itemColhex[target_quad]
        cue_audi = itemAudi[target_quad]
        POS_cue = POS[cue_idx]#cue_position
      End Routine:
        thisExp.addData('cue_valid', cue_valid)
        thisExp.addData('target_quad', target_quad)
        thisExp.addData('cue_idx', cue_idx)
        thisExp.addData('target_posx', cue_posx)
        thisExp.addData('target_posy', cue_posy)
        thisExp.addData('target_color', cue_color)
        thisExp.addData('target_audi', cue_audi)
        thisExp.addData('POS_cue', POS_cue)

        thisExp.addData('cue_valid', cue_valid)
        thisExp.addData('target_quad', target_quad)
        thisExp.addData('cue_idx', cue_idx)
        thisExp.addData('cue_posx', cue_posx)
        thisExp.addData('cue_posy', cue_posy)
        thisExp.addData('target_posx', target_posx)
        thisExp.addData('target_posy', target_posy)
        thisExp.addData('cue_color', cue_color)
        thisExp.addData('cue_audi', cue_audi)
        thisExp.addData('POS_cue', POS_cue)
    PolygonComponent Cue
      pos [set every repeat] = POS_cue
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent targetC
      colorSpace = hex
      fillColor [set every repeat] = $cue_color
      pos [set every repeat] = (cue_posx,cue_posy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    SoundComponent targetAudi
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $cue_audi
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine study
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    CodeComponent pattern
      Code Type = Auto->JS
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      Begin Experiment:
        print(f"win size: {win.size}, aspect: {win.size[0]/win.size[1]:.3f}")
        print(f"x edge in height units: ±{win.size[0]/win.size[1]/2:.3f}")
        import numpy as np
        rng = np.random.default_rng()
      Begin Routine:
        #ToDo
        #define colorABCD
        itemAudi = ['stimuli/b3.wav','stimuli/b3.wav', 'stimuli/p3.wav', 'stimuli/p3.wav']

        Fix_Dur = .3
        itemColhex = ['#B744A1',
                      '#B52C95',
                      '#B744A1',
                      '#B52C95']


        d = 10.0 / np.sqrt(2)      # 偏心度 5 度
        SIZE = [.7, .8, 1.1 ,1.3]
        POS = [
            ( d,  d),    # 0 = 右上
            (-d,  d),    # 1 = 左上
            (-d, -d),    # 2 = 左下
            ( d, -d),    # 3 = 右下
        ]
        order = rng.permutation(4)

        posAx, posAy = POS[order[0]]
        posBx, posBy = POS[order[1]]
        posCx, posCy = POS[order[2]]
        posDx, posDy = POS[order[3]]
        NAMES = ['UR', 'UL', 'BL', 'BR']

        quadA = NAMES[order[0]]
        quadB = NAMES[order[1]]
        quadC = NAMES[order[2]]
        quadD = NAMES[order[3]]

        START = [0.3, 1.3, 2.3, 3.3]
        DUR = 1.0
        TimeStartA = START[order[0]]
        TimeStartB = START[order[1]]
        TimeStartC = START[order[2]]
        TimeStartD = START[order[3]]
        itemAudiA = itemAudi[order[0]]
        itemAudiB = itemAudi[order[1]]
        itemAudiC = itemAudi[order[2]]
        itemAudiD = itemAudi[order[3]]
        StudyA = itemColhex[order[0]]
        StudyB = itemColhex[order[1]]
        StudyC = itemColhex[order[2]]
        StudyD = itemColhex[order[3]]
        item_quad = [None, None, None, None]       # item index -> 象限名稱(UR/UL/BL/BR)
        for k in range(4):
            item_quad[order[k]] = NAMES[k]
      End Routine:
        NAMES = ['UR', 'UL', 'BL', 'BR']

        thisExp.addData('quadA', quadA)
        thisExp.addData('quadB', quadB)
        thisExp.addData('quadC', quadC)
        thisExp.addData('quadD', quadD)
        thisExp.addData('order', order)
        thisExp.addData('Ans',NAMES[k])
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Fix_Dur
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    SoundComponent audiA
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiA
      startVal [time (s)] = TimeStartA
      stopVal [duration (s)] = DUR
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    PolygonComponent colorA
      colorSpace = hex
      fillColor [set every repeat] = $StudyA
      pos [set every repeat] = (posAx, posAy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartA
      stopVal [duration (s)] = DUR
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    SoundComponent audiB
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiB
      startVal [time (s)] = TimeStartB
      stopVal [duration (s)] = DUR
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    PolygonComponent colorB
      colorSpace = hex
      fillColor [set every repeat] = $StudyB
      pos [set every repeat] = (posBx, posBy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartB
      stopVal [duration (s)] = DUR
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    SoundComponent audiC
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiC
      startVal [time (s)] = TimeStartC
      stopVal [duration (s)] = DUR
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    PolygonComponent colorC
      colorSpace = hex
      fillColor [set every repeat] = $StudyC
      pos [set every repeat] = (posCx, posCy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartC
      stopVal [duration (s)] = DUR
      units = deg
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    SoundComponent audiD
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiD
      startVal [time (s)] = TimeStartD
      stopVal [duration (s)] = DUR
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    PolygonComponent colorD
      colorSpace = hex
      fillColor [set every repeat] = $StudyD
      pos [set every repeat] = (posDx, posDy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartD
      stopVal [duration (s)] = DUR
      units = deg
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  Routine Intro
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    CodeComponent check_screen
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import monitors
        m = win.monitor
        print(f"monitor: {m.name}")
        print(f"width_cm: {m.getWidth()}, dist_cm: {m.getDistance()}")
        print(f"res: {m.getSizePix()}, win: {win.size}")
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = Pree space to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 20
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    Routine study
    Routine cue
    Routine task
  LoopTerminator trials
