PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = (1024, 768)
  expName = GRTv2
  keyboardBackend = PsychToolbox
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine learning
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    SoundComponent item1
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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    SoundComponent item2
      forceEndRoutine = False
      sound [set every repeat] = $audi1
      startVal [time (s)] = StartI1
      stopVal [duration (s)] = 1.0
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  Routine task
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    CodeComponent recog
      Code Type = Auto->JS
      Begin Routine:
        d = 10.0 / np.sqrt(2)
        POS = [( d,  d), (-d,  d), (-d, -d), ( d, -d)]      # 0=UR 1=UL 2=BL 3=BR
        GAP = 4.2
        POS_TXT = [(x, y + GAP/2) for x, y in POS]
        POS_COL = [(x, y - GAP/2) for x, y in POS]

        final_value = [COLOUR_HEX[0], COLOUR_HEX[1], COLOUR_HEX[0], COLOUR_HEX[1]]   # 與 itemColhex 同序
        TXT         = ["[bɛ]", "[bɛ]", "[pɛ]", "[pɛ]"]   # 與 itemAudi 同序

        # 四個選項元件各自釘在固定螢幕位置
        txtUR_pos, colUR_pos = POS_TXT[0], POS_COL[0]
        txtUL_pos, colUL_pos = POS_TXT[1], POS_COL[1]
        txtBL_pos, colBL_pos = POS_TXT[2], POS_COL[2]
        txtBR_pos, colBR_pos = POS_TXT[3], POS_COL[3]

        # 每試次只洗「哪個 item 擺哪個位置」
        opt_perm = [int(x) for x in rng.permutation(4)]
        UR_item, UL_item, BL_item, BR_item = opt_perm

        UR_col, UR_TXT = final_value[UR_item], TXT[UR_item]
        UL_col, UL_TXT = final_value[UL_item], TXT[UL_item]
        BL_col, BL_TXT = final_value[BL_item], TXT[BL_item]
        BR_col, BR_TXT = final_value[BR_item], TXT[BR_item]
      End Routine:
        KEY_TO_SLOT = {'f': 'BL', 'g': 'UL', 'h': 'BR', 'j': 'UR'}
        SLOT_ITEM   = {'UR': UR_item, 'UL': UL_item, 'BL': BL_item, 'BR': BR_item}

        pressed_key = key_resp_2.keys       # 之後接 ResponseBox 時改從 respond 讀
        if isinstance(pressed_key, list):
            pressed_key = pressed_key[-1] if len(pressed_key) > 0 else None

        if pressed_key in KEY_TO_SLOT:
            chosen_slot = KEY_TO_SLOT[pressed_key]
            chosen_item = SLOT_ITEM[chosen_slot]
        else:
            chosen_slot = None
            chosen_item = None

        # ---- 結果分類 ----
        # 順序不可調換: valid 試次的 cued_item == target_item, 必須先被 correct 接走,
        # 否則所有答對的 valid 試次都會被誤標成 intrusion。
        if chosen_item is None:
            outcome = 'noresp'
        elif chosen_item == target_item:
            outcome = 'correct'
        elif chosen_item == cued_item:
            outcome = 'intrusion'
        else:
            outcome = 'other'

        is_correct = (outcome == 'correct')

        # 錯在哪個向度: 1 = 只差顏色, 2 = 只差聲音, 3 = 兩者都差
        err_rel = None if (chosen_item is None or outcome == 'correct') else (chosen_item ^ target_item)

        thisExp.addData('opt_perm',     str(opt_perm))
        thisExp.addData('pressed_key',  pressed_key)
        thisExp.addData('chosen_slot',  chosen_slot)
        thisExp.addData('chosen_item',  chosen_item)
        thisExp.addData('outcome',      outcome)
        thisExp.addData('err_rel',      err_rel)
        thisExp.addData('err_rel_name', REL_NAME[err_rel] if err_rel else '')
        thisExp.addData('is_correct',   is_correct)
        thisExp.addData('rt',           key_resp_2.rt)

        # 練習階段累計答對數, 供練習結束時回饋
        if is_practice and outcome == 'correct':
            practice_correct += 1
    ImageComponent BOX
      image = stimuli/box.png
      size = (6, 6)
      startVal [time (s)] = 0.0
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    ButtonBoxComponent respond
      deviceLabel = ResponseBox
      disabled = True
      discardPrevious = True
      forceEndRoutine = True
      registerOn = True
      startVal [time (s)] = 0.0
      store = first
      storeCorrect = False
      syncScreenRefresh = False
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    TextComponent UL
      letterHeight = 4
      pos [set every repeat] = txtUL_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $UL_TXT
      units = deg
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    TextComponent UR
      letterHeight = 4
      pos [set every repeat] = txtUR_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $UR_TXT
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    TextComponent BL
      color [set every repeat] = white
      letterHeight = 4
      pos [set every repeat] = txtBL_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $BL_TXT
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    TextComponent BR
      letterHeight = 4
      pos [set every repeat] = txtBR_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $BR_TXT
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    PolygonComponent vUL
      colorSpace = hex
      fillColor [set every repeat] = $UL_col
      pos [set every repeat] = colUL_pos
      shape = rectangle
      size = [4,4]
      startVal [time (s)] = 0.0
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    PolygonComponent vUR
      colorSpace = hex
      fillColor [set every repeat] = $UR_col
      pos [set every repeat] = colUR_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    PolygonComponent vBL
      colorSpace = hex
      fillColor [set every repeat] = $BL_col
      pos [set every repeat] = colBL_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    PolygonComponent vBR
      colorSpace = hex
      fillColor [set every repeat] = $BR_col
      pos [set every repeat] = colBR_pos
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','g','h','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        cued_item = target_item ^ relation      # relation = 0 -> cued == target (valid)
        cue_idx   = quad_content.index(cued_item)

        cue_posx, cue_posy       = POS[cue_idx]
        target_posx, target_posy = POS[target_quad]
        POS_cue = POS[cue_idx]

        # probe: 畫在 cue 的位置, 但內容是 target 的 item -- 刻意製造的衝突。
        # invalid 試次上受試者報告 cued_item 即為 intrusion。
        cue_color = itemColhex[target_item]
        cue_audi  = itemAudi[target_item]
      End Routine:
        thisExp.addData('cue_valid',     int(cue_valid))
        thisExp.addData('relation',      int(relation))
        thisExp.addData('relation_name', REL_NAME[relation])
        thisExp.addData('target_item',   int(target_item))
        thisExp.addData('cued_item',     int(cued_item))
        thisExp.addData('target_quad',   int(target_quad))
        thisExp.addData('cue_idx',       int(cue_idx))
        thisExp.addData('cue_color',     cue_color)
        thisExp.addData('cue_audi',      cue_audi)
        thisExp.addData('POS_cue',       str(POS_cue))
        thisExp.addData('target_pos',    str((target_posx, target_posy)))
    PolygonComponent Cue
      pos [set every repeat] = POS_cue
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent targetC
      colorSpace = hex
      fillColor [set every repeat] = $cue_color
      pos [set every repeat] = (cue_posx,cue_posy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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    SoundComponent targetAudi
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $cue_audi
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine study
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    CodeComponent pattern
      Code Type = Auto->JS
      Begin Experiment:
        from psychopy import monitors
        import numpy as np
        rng = np.random.default_rng()

        # --------------------------------------------------------------------
        # item 編碼:  colour = i & 1 ,  sound = (i >> 1) & 1
        #   itemColhex = [C1, C2, C1, C2]  ->  i & 1
        #   itemAudi   = [S1, S1, S2, S2]  ->  i >> 1
        # 因此  target ^ 1 = 只差顏色 ,  ^ 2 = 只差聲音 ,  ^ 3 = 兩者都差
        # --------------------------------------------------------------------
        REL_NAME = {0: 'valid', 1: 'colour_only', 2: 'sound_only', 3: 'both'}

        N_VALID_PER_CELL   = 24   # 每個 (target_item x serial_pos) 的 valid 試次
        N_INVALID_PER_CELL = 4    # 每個 (target_item x relation x serial_pos) 的 invalid 試次
        BLOCK_SIZE         = 144  # 主實驗每個 block 的試次數 -> 576/144 = 4 個 block

        # ---- 主實驗的平衡計畫 ----
        strata = []
        for _it in range(4):
            for _sp in range(4):
                strata.append(((1, _it, 0, _sp), N_VALID_PER_CELL))
                for _rel in (1, 2, 3):
                    strata.append(((0, _it, _rel, _sp), N_INVALID_PER_CELL))

        N_MAIN   = sum(n for _, n in strata)
        n_blocks = N_MAIN // BLOCK_SIZE
        blocks   = [[] for _ in range(n_blocks)]
        _k = 0
        for _cond, _n in strata:          # 連續輪流發牌, 跨 stratum 不重置
            for _ in range(_n):
                blocks[_k % n_blocks].append(_cond)
                _k += 1
        for _bi in range(n_blocks):       # block 內打散
            blocks[_bi] = [blocks[_bi][i] for i in rng.permutation(len(blocks[_bi]))]
        main_plan = [t for b in blocks for t in b]

        # ---- 練習計畫 ----
        # 用與主實驗**相同的 valid:invalid 比例**(2:1)。若練習全是 valid, 受試者會
        # 帶著「提示一定準」的預期進入正式階段, 前幾個 invalid 試次的效果會異常大、
        # 之後才衰減 —— 那會讓平衡設計失效。
        N_PRACTICE = 24
        practice_plan = []
        for _it in range(4):
            for _sp in range(4):
                practice_plan.append((1, _it, 0, _sp))          # 16 個 valid
        for _it in range(4):
            for _rel in rng.permutation([1, 2, 3])[:2]:
                practice_plan.append((0, _it, int(_rel), int(rng.integers(4))))   # 8 個 invalid
        practice_plan = [practice_plan[i] for i in rng.permutation(len(practice_plan))]

        trial_plan = practice_plan + main_plan
        N_TRIALS   = len(trial_plan)
        trial_i    = -1
        practice_correct = 0      # 練習階段的答對數, 用於練習結束時的回饋

        print(f"[plan] 練習 {N_PRACTICE} + 主實驗 {N_MAIN} = {N_TRIALS} 試次;"
              f" 主實驗 {n_blocks} blocks x {BLOCK_SIZE}")

        # ---- 色彩軸:從離線算好的查表載入 ----
        # agrt_setup.py 需要 colour-science,而 PsychoPy 內建的 Python 沒有它 ——
        # 在這裡 import 會讓整個實驗開不起來。改用 export_lut() 離線產生的 JSON,
        # 執行期只靠 numpy 查表。要改色彩區域就重跑 agrt_setup.export_lut()。
        import json
        with open('agrt_colour_lut.json', encoding='utf-8') as _f:
            _LUT = json.load(_f)
        _LUT_HEX = _LUT['hex']
        _LUT_ARC = _LUT['arc_min'] + np.arange(len(_LUT_HEX)) * _LUT['step']

        def colour_for(arc):
            """弧長座標(dE00) -> '#RRGGBB'。超出可用範圍就報錯,不靜默夾擠。"""
            if not (_LUT_ARC[0] <= arc <= _LUT_ARC[-1]):
                raise ValueError(f"色彩弧長 {arc} 超出可用範圍 "
                                 f"[{_LUT_ARC[0]:.2f}, {_LUT_ARC[-1]:.2f}] dE00")
            return _LUT_HEX[int(np.abs(_LUT_ARC - arc).argmin())]

        # 兩個顏色在弧長軸上的位置,對稱於錨點(座標 0)。
        # ⚠ 適應階段接上之後,由 calc_adapted 覆寫這兩個數字。
        COLOUR_ARC = [-3.0, +3.0]
        COLOUR_HEX = [colour_for(a) for a in COLOUR_ARC]

        # 聽覺端點:Kutlu & McMurray (2024) beachpeach 連續體, 已剪除尾音 /tS/ 的 CV 版
        # (step1 = 有聲 /bi/, step9 = 送氣 /pi/;母音位準差 0.011 dB, 起點差 0.2 ms)
        # 以下為預設值;聲音 staircase 結束時會覆寫成校準出的兩步
        AUDIO_B = 'stimuli/kutlu_mcmurray_2024/cv/beachpeach1_cv.wav'
        AUDIO_P = 'stimuli/kutlu_mcmurray_2024/cv/beachpeach9_cv.wav'
        print(f"[colour] 錨點 h={_LUT['anchor_h']} L*={_LUT['lstar']} C*={_LUT['cstar']};"
              f" 弧長 {COLOUR_ARC} -> {COLOUR_HEX}")
      Begin Routine:
        # ---- 這一試次的計畫 ----
        trial_i += 1
        cue_valid, target_item, relation, target_serial = trial_plan[trial_i]
        is_practice = (trial_i < N_PRACTICE)

        itemAudi   = [AUDIO_B, AUDIO_B, AUDIO_P, AUDIO_P]
        itemColhex = [COLOUR_HEX[0], COLOUR_HEX[1], COLOUR_HEX[0], COLOUR_HEX[1]]
        Fix_Dur = .3

        d = 10.0 / np.sqrt(2)          # 偏心度 5 度
        POS   = [( d,  d),             # 0 = UR 右上
                 (-d,  d),             # 1 = UL 左上
                 (-d, -d),             # 2 = BL 左下
                 ( d, -d)]             # 3 = BR 右下
        NAMES = ['UR', 'UL', 'BL', 'BR']
        START = [0.3, 1.3, 2.3, 3.3]
        DUR   = 1.0

        # 位置固定 -- 變數名直接說明在哪個象限
        posURx, posURy = POS[0]
        posULx, posULy = POS[1]
        posBLx, posBLy = POS[2]
        posBRx, posBRy = POS[3]

        # 內容排列: 象限 q 上放 item quad_content[q]
        quad_content = [int(x) for x in rng.permutation(4)]
        target_quad  = quad_content.index(target_item)

        # 時間排列: 象限 q 在 START[time_perm[q]] 出現。
        # 強制 target 落在計畫指定的序列位置, 其餘仍隨機。
        time_perm = [int(x) for x in rng.permutation(4)]
        _i = time_perm.index(target_serial)
        time_perm[_i], time_perm[target_quad] = time_perm[target_quad], time_perm[_i]

        StudyUR, itemAudiUR = itemColhex[quad_content[0]], itemAudi[quad_content[0]]
        StudyUL, itemAudiUL = itemColhex[quad_content[1]], itemAudi[quad_content[1]]
        StudyBL, itemAudiBL = itemColhex[quad_content[2]], itemAudi[quad_content[2]]
        StudyBR, itemAudiBR = itemColhex[quad_content[3]], itemAudi[quad_content[3]]

        TimeStartUR = START[time_perm[0]]
        TimeStartUL = START[time_perm[1]]
        TimeStartBL = START[time_perm[2]]
        TimeStartBR = START[time_perm[3]]
      End Routine:
        thisExp.addData('is_practice', bool(is_practice))
        thisExp.addData('trial_i',       trial_i)
        thisExp.addData('quad_content',  str(quad_content))
        thisExp.addData('time_perm',     str(time_perm))
        thisExp.addData('target_serial', int(target_serial))
        thisExp.addData('studyUR', f'{StudyUR}|{itemAudiUR}|t={TimeStartUR}')
        thisExp.addData('studyUL', f'{StudyUL}|{itemAudiUL}|t={TimeStartUL}')
        thisExp.addData('studyBL', f'{StudyBL}|{itemAudiBL}|t={TimeStartBL}')
        thisExp.addData('studyBR', f'{StudyBR}|{itemAudiBR}|t={TimeStartBR}')
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Fix_Dur
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    SoundComponent audiUR
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiUR
      startVal [time (s)] = TimeStartUR
      stopVal [duration (s)] = DUR
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    PolygonComponent colorUR
      colorSpace = hex
      fillColor [set every repeat] = $StudyUR
      pos [set every repeat] = (posURx, posURy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartUR
      stopVal [duration (s)] = DUR
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    SoundComponent audiUL
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiUL
      startVal [time (s)] = TimeStartUL
      stopVal [duration (s)] = DUR
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    PolygonComponent colorUL
      colorSpace = hex
      fillColor [set every repeat] = $StudyUL
      pos [set every repeat] = (posULx, posULy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartUL
      stopVal [duration (s)] = DUR
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    SoundComponent audiBL
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiBL
      startVal [time (s)] = TimeStartBL
      stopVal [duration (s)] = DUR
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    PolygonComponent colorBL
      colorSpace = hex
      fillColor [set every repeat] = $StudyBL
      pos [set every repeat] = (posBLx, posBLy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartBL
      stopVal [duration (s)] = DUR
      units = deg
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    SoundComponent audiBR
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $itemAudiBR
      startVal [time (s)] = TimeStartBR
      stopVal [duration (s)] = DUR
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    PolygonComponent colorBR
      colorSpace = hex
      fillColor [set every repeat] = $StudyBR
      pos [set every repeat] = (posBRx, posBRy)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = TimeStartBR
      stopVal [duration (s)] = DUR
      units = deg
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  Routine Intro
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    CodeComponent check_screen
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import monitors
        m = win.monitor
        print(f"monitor: {m.name}")
        print(f"width_cm: {m.getWidth()}, dist_cm: {m.getDistance()}")
        print(f"res: {m.getSizePix()}, win: {win.size}")
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Welcome, and thank you for taking part.

        This session has two parts: a short calibration, then the main experiment. Please make sure you are wearing the headphones before continuing.

        Press the space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent rest_code
      Code Type = Py
      Begin Routine:
        # 這個 routine 只在三種時機顯示, 其餘試次直接跳過。
        n_done = trial_i + 1

        if n_done == N_PRACTICE:
            pct = 100.0 * practice_correct / max(N_PRACTICE, 1)
            rest_msg = (
                "Practice finished.\n\n"
                f"You got {practice_correct} of {N_PRACTICE} correct ({pct:.0f}%).\n\n"
                "If that felt like guessing, tell the experimenter now.\n\n"
                "The main experiment starts next. It is divided into "
                f"{n_blocks} blocks with a rest after each one.\n\n"
                "        g = upper left            j = upper right\n"
                "        f = lower left            h = lower right\n\n"
                "Press the space bar to begin.")
        elif n_done > N_PRACTICE and (n_done - N_PRACTICE) % BLOCK_SIZE == 0 and n_done < N_TRIALS:
            done_blocks = (n_done - N_PRACTICE) // BLOCK_SIZE
            rest_msg = (
                f"Block {done_blocks} of {n_blocks} finished.\n\n"
                "Take a rest. Look away from the screen for a moment.\n\n"
                "        g = upper left            j = upper right\n"
                "        f = lower left            h = lower right\n\n"
                "Press the space bar when you are ready to continue.")
        else:
            continueRoutine = False
            rest_msg = ""
    TextComponent rest_text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_msg
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    KeyboardComponent rest_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_adaptive
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    TextComponent instruction_adaptive_text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
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      text:
        Colour calibration.

        You will see one coloured square at a time. Decide which
        colour family it belongs to:

                f = more blue            j = more pink

        A syllable plays with each square - it is always the same
        one; you can ignore it.

        You get feedback after each answer. The colours are chosen
        to stay difficult, so feeling unsure is normal - just answer
        with your best guess every time.

        This short block (about 3-4 minutes) tunes the colours to
        your eyes before the main experiment.

        Press the space bar to start.
    KeyboardComponent instruction_adaptive_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_normal
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    TextComponent instruction_normal_text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
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      text:
        Main experiment.

        Four coloured squares will appear one at a time, one in each corner of the screen, and each of them comes with its own speech sound. Try to remember which colour and which sound belong together and where they appeared.

        A frame will then appear at one of the corners, and an item will appear in it. When you see the frame, recall what has just appeared. On the final screen four options are shown, one in each corner - choose the one you have in mind by pressing the key for its position:

                g = upper left            j = upper right
                f = lower left            h = lower right

        The picture below shows how the four keys point to the four corners.

        You will start with a short practice, then four blocks with a rest after each one. Answer as accurately as you can - speed is not important.

        Press the space bar to begin.
    KeyboardComponent instruction_normal_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine adaptive_col
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    CodeComponent adapt_code
      Code Type = Py
      Begin Experiment:
        # ── 顏色 adaptive 校準 (Psi; Kontsevich & Tyler 1999, AGRT 實作) ──
        # 聲音維度固定在 beachpeach 端點, 不做 adaptive; staircase 只跑顏色。
        from AGRT import agrtPsiObject
        import agrt_setup as _AS

        N_ADAPT     = 60      # staircase 試次數 (~3-4 分鐘)
        OVERALL_ACC = 0.64    # 每維目標正確率 = sqrt(0.64) = 0.80
                              # <- 待確認的旋鈕: 若要知覺更乾淨, 0.81 -> 每維 0.90
        PSI_DELTA   = 0.08    # lapse; 與 beta 上限除數 2.3107 的推導一致
        KEY_LO, KEY_HI = 'f', 'j'   # f = 偏藍側(arc<0), j = 偏粉側(arc>0)

        _glo, _ghi = _AS.arc_range_in_gamut()
        ARC_LIM  = min(-_glo, _ghi)            # 對稱可用半長 ~24.14 dE00
        BETA_MAX = _AS.max_supportable_sd()    # ~10.45 dE00

        psi = agrtPsiObject(x=(-ARC_LIM, ARC_LIM), alpha=(-8.0, 8.0),
                            beta=(0.25, BETA_MAX), xPrecision=201,
                            aPrecision=81, bPrecision=81,
                            delta=PSI_DELTA, stepType='lin')
        psi.update(None)      # 初始化, 產生第一個提議值
        adapt_i = 0
      Begin Routine:
        adapt_arc   = float(psi.nextIntensity)
        adapt_hex   = colour_for(adapt_arc)
        adapt_truth = 1 if adapt_arc > 0 else 0   # 邊界 = 錨點 303 度 (arc = 0)
      End Routine:
        _k = adapt_key.keys
        adapt_resp    = 1 if _k == KEY_HI else 0
        adapt_correct = int(adapt_resp == adapt_truth)
        psi.update(adapt_resp)
        adapt_i += 1
        fb_msg = 'Correct' if adapt_correct else 'Wrong'

        thisExp.addData('adapt_i', adapt_i)
        thisExp.addData('adapt_arc', adapt_arc)
        thisExp.addData('adapt_hex', adapt_hex)
        thisExp.addData('adapt_resp', adapt_resp)
        thisExp.addData('adapt_correct', adapt_correct)

        if adapt_i >= N_ADAPT:
            _a, _b = psi.estimateLambda()
            _lo_x, _hi_x = psi.estimateThreshold(OVERALL_ACC, None)
            # 防禦性夾值(數學上 |alpha|+0.95*beta < ARC_LIM, 不應觸發)
            _lo_x = max(float(_lo_x), -ARC_LIM)
            _hi_x = min(float(_hi_x),  ARC_LIM)
            COLOUR_ARC = [_lo_x, _hi_x]          # 覆寫全域 -> study/pattern 每 trial 重讀
            COLOUR_HEX = [colour_for(_lo_x), colour_for(_hi_x)]
            thisExp.addData('psi_alpha', float(_a))
            thisExp.addData('psi_beta', float(_b))
            thisExp.addData('colour_arc_lo', _lo_x)
            thisExp.addData('colour_arc_hi', _hi_x)
            thisExp.addData('colour_hex_lo', COLOUR_HEX[0])
            thisExp.addData('colour_hex_hi', COLOUR_HEX[1])
            print(f"[adaptive] alpha={_a:.2f} beta={_b:.2f} -> {COLOUR_ARC} -> {COLOUR_HEX}")
    PolygonComponent adapt_patch
      colorSpace = hex
      fillColor [set every repeat] = $adapt_hex
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    KeyboardComponent adapt_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    SoundComponent adapt_col_sound
      deviceLabel = Laptop
      forceEndRoutine = False
      sound = stimuli/kutlu_mcmurray_2024/cv/beachpeach5_cv.wav
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine adapt_fb
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    TextComponent fb_text
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $fb_msg
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  Routine adaptive_snd
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    CodeComponent adapt_snd_code
      Code Type = Py
      Begin Experiment:
        # ── 聲音 adaptive 校準 (Psi;與顏色分開的獨立 staircase) ──
        # 座標 = beachpeach 連續體步階 1..9(離散格點)。做聲音時顏色恆定(錨點色)。
        # 端點是 fallback:斜率太淺時放置點被夾回 1/9,自然退回端點設計。
        from AGRT import agrtPsiObject

        N_ADAPT_SND     = 45
        OVERALL_ACC_SND = 0.64    # 每維 sqrt(0.64)=0.80;要改與顏色的 OVERALL_ACC 一起改
        SND_DELTA       = 0.08
        KEY_B, KEY_P    = 'f', 'j'
        SND_FILES = ['stimuli/kutlu_mcmurray_2024/cv/beachpeach%d_cv.wav' % _i
                     for _i in range(1, 10)]

        psi_snd = agrtPsiObject(x=(1.0, 9.0), alpha=(1.5, 8.5), beta=(0.2, 3.46),
                                xPrecision=9, aPrecision=81, bPrecision=81,
                                delta=SND_DELTA, stepType='lin')
        psi_snd.update(None)
        adapt_snd_i = 0
      Begin Routine:
        adapt_snd_step = int(round(float(psi_snd.nextIntensity)))
        adapt_snd_file = SND_FILES[adapt_snd_step - 1]
        adapt_snd_hex  = colour_for(0.0)      # 顏色恆定 = 錨點 (303 度, arc=0)
      End Routine:
        _k = adapt_snd_key.keys
        adapt_snd_resp = 1 if _k == KEY_P else 0
        psi_snd.update(adapt_snd_resp)
        adapt_snd_i += 1

        if adapt_snd_step == 5:
            adapt_snd_correct = -1        # 連續體中點沒有正解, 不給對錯回饋
            fb_msg = ''
        else:
            _truth = 1 if adapt_snd_step > 5 else 0
            adapt_snd_correct = int(adapt_snd_resp == _truth)
            fb_msg = 'Correct' if adapt_snd_correct else 'Wrong'

        thisExp.addData('adapt_snd_i', adapt_snd_i)
        thisExp.addData('adapt_snd_step', adapt_snd_step)
        thisExp.addData('adapt_snd_resp', adapt_snd_resp)
        thisExp.addData('adapt_snd_correct', adapt_snd_correct)

        if adapt_snd_i >= N_ADAPT_SND:
            _a, _b = psi_snd.estimateLambda()
            _lo, _hi = psi_snd.estimateThreshold(OVERALL_ACC_SND, None)
            _s1 = int(round(min(max(float(_lo), 1.0), 9.0)))
            _s2 = int(round(min(max(float(_hi), 1.0), 9.0)))
            if _s1 == _s2:                # 斜率極陡, 兩點落同一步 -> 拉開成相鄰步
                if _s2 < 9:
                    _s2 += 1
                else:
                    _s1 -= 1
            AUDIO_B = SND_FILES[_s1 - 1]  # 覆寫全域 -> study/pattern 每 trial 重讀
            AUDIO_P = SND_FILES[_s2 - 1]
            thisExp.addData('psi_snd_alpha', float(_a))
            thisExp.addData('psi_snd_beta', float(_b))
            thisExp.addData('snd_step_b', _s1)
            thisExp.addData('snd_step_p', _s2)
            print(f"[adaptive-snd] alpha={_a:.2f} beta={_b:.2f} -> steps {_s1}/{_s2}")
    PolygonComponent adapt_snd_patch
      colorSpace = hex
      fillColor [set every repeat] = $adapt_snd_hex
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    SoundComponent adapt_snd_sound
      deviceLabel = Laptop
      forceEndRoutine = False
      sound [set every repeat] = $adapt_snd_file
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    KeyboardComponent adapt_snd_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruction_adaptive_snd
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    TextComponent instruction_adaptive_snd_text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
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      text:
        Sound calibration.

        You will hear one syllable at a time. Decide which consonant
        it starts with:

                f = sounds like 'b'            j = sounds like 'p'

        A coloured square appears with each sound - it is always the
        same colour; you can ignore it.

        You get feedback after most answers. The sounds are chosen to
        stay difficult, so feeling unsure is normal - just answer with
        your best guess every time.

        This short block (about 2-3 minutes) tunes the sounds to your
        ears before the main experiment.

        Press the space bar to start.
    KeyboardComponent instruction_adaptive_snd_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intro
  Routine instruction_normal
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = N_TRIALS
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    Routine study
    Routine cue
    Routine task
    Routine rest
  LoopTerminator trials
