PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = #808080
  colorSpace = hex
  expName = VAWM
  keyboardBackend = PsychToolbox
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine study_stage
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    CodeComponent StudyCode
      Code Type = Auto->JS
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      Before Experiment:
        from psychtoolbox import audio
        from soundfile import SoundFile
      Begin Experiment:
        import random
        import numpy as np
        from psychtoolbox import audio
        import sounddevice as sd
        sd.default.device = 'Headphones (Realtek(R) Audio)'
    TextComponent Fix
      colorSpace = named
      letterHeight = .2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
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    PolygonComponent stim1
      colorSpace = hex
      fillColor [set every repeat] = $color1_target
      lineColor = #808080
      opacity [set every repeat] = 1
      pos [set every repeat] = (-200, 0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent stim2
      colorSpace = hex
      fillColor [set every repeat] = $color2_target
      lineColor = #808080
      pos [set every repeat] = (200,0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1
      units = pix
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    SoundComponent audi1
      deviceLabel = speakers
      forceEndRoutine = False
      sound [set every repeat] = $audio1_target_file
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 1
      volume [set every repeat] = 1
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    SoundComponent audi2
      deviceLabel = Dell
      forceEndRoutine = False
      sound [set every repeat] = $audio2_target_file
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1
      volume [set every repeat] = 1
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  Routine probe
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    CodeComponent ProbeCode
      Code Type = Auto->JS
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      Before Experiment:
        from psychtoolbox import audio
        from soundfile import SoundFile
      Begin Routine:
        condition = np.random.choice([0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17],
        p = [.125,.125,.0625,.0625,.0625,.0625,.0625,.0625,.03125,.03125,.03125,.03125,.0625,.0625,.03125,.03125,.03125,.03125])
        #AX AX= color, XA= audio
        #AA=0 HA =1 LA = 2
        #AH=3 HH=4 LH=5
        #AL=6 HL=7 LL=8
        if condition == 0 :#AA .25
           targetCol = color1_target
           targetAud = audio1_target_file
        elif condition == 1:#AA.25
            targetCol = color2_target
            targetAud = audio2_target_file
        if condition == 2:#HA
           targetCol = color1_target
           targetAud = audio1_H_file
        elif condition == 3:#HA
            targetCol = color2_target
            targetAud = audio2_H_file
        if condition == 4:#LA
           targetCol = color1_target
           targetAud = audio1_L_file
        elif condition == 5:#LA
            targetCol = color2_target
            targetAud = audio2_L_file
        if condition == 6:#AH
           targetCol = color1_H
           targetAud = audio1_target_file
        elif condition == 7:#AH
            targetCol = color2_H
            targetAud = audio2_target_file
        if condition == 8:#HH
           targetCol = color1_H
           targetAud = audio1_H_file
        elif condition == 9:#HH
            targetCol = color2_H
            targetAud = audio2_H_file
        if condition == 10:#LH
           targetCol = color1_L
           targetAud = audio1_H_file
        elif condition == 11:#LH
            targetCol = color2_L
            targetAud = audio2_H_file
        if condition == 12: #AL
           targetCol = color1_L
           targetAud = audio1_target_file
        elif condition == 13: #AL
            targetCol = color2_L
            targetAud = audio2_target_file
        if condition == 14:#HL
           targetCol = color1_H
           targetAud = audio1_L_file
        elif condition == 15:#HL
            targetCol = color2_H
            targetAud = audio2_L_file
        if condition == 16:#LL
           targetCol = color1_L
           targetAud = audio1_L_file
        elif condition == 17:#LL
            targetCol = color2_L
            targetAud = audio2_L_file
      End Routine:
        # Check if the hardware was actually found and a response was made
        #if ResponseBox is not None and hasattr(ResponseBox, 'duration'):
        #    if ResponseBox.duration is not None:
        #        thisExp.addData('ResponseBox.duration', ResponseBox.duration)
        # Check if the hardware was initialized and a response occurred
        if ResponseBox is not None:
            # Use getattr to safely check for 'duration' without crashing
            resp_dur = getattr(ResponseBox, 'duration', None)
            if resp_dur is not None:
                thisExp.addData('ResponseBox.duration', resp_dur)
            else:
                thisExp.addData('ResponseBox.duration', 'no_response')
        else:
            thisExp.addData('ResponseBox.duration', 'device_not_found')
        thisExp.addData('condition', condition)
        thisExp.addData('TargetA', targetAud)
        thisExp.addData('TargetC', targetCol)
    TextComponent Fixation
      letterHeight = 12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
      units = pix
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    PolygonComponent targetV
      colorSpace = hex
      fillColor [set every repeat] = $targetCol
      lineColor = #808080
      pos [set every repeat] = (0,0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
      units = pix
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    SoundComponent targetA
      deviceLabel = speakers
      forceEndRoutine = False
      sound [set every repeat] = $targetAud
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
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    CedrusButtonBoxComponent ResponseBox plugin="psychopy-cedrus"
      allowedKeys [set every repeat] = 3,4
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      registerOn = press
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
  Routine practice_intro
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    TextComponent prac_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        This is the practice phase.
        After each response, you will receive feedback indicating whether your answer was correct or incorrect. This will help you familiarize yourself with the task.
        Press [Space] to begin the practice.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 0 and ResponseBox.keys == 4:#key_resp.keys == 'y':
            resp ="Correct"
        elif condition == 1 and ResponseBox.keys == 4:
            resp ="Correct"
        elif condition == 2 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 3 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 4 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 5 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 6 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 7 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 8 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 9 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 10 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 11 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 12 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 13 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 14 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 15 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 16 and ResponseBox.keys == 3:
            resp ="Correct"
        elif condition == 17 and ResponseBox.keys == 3:
            resp ="Correct"
        else:
            resp ="Incorrect"
      End Routine:
        thisExp.addData("Acc",resp)
    TextComponent answer
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $resp
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  Routine studyintro
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychtoolbox import audio
        from soundfile import SoundFile


        from psychopy import prefs

        prefs.hardware['audioDevice'] = ['Speaker (Realtek(R) Audio)']
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment.
        In this task, you will see colored patches on the screen and hear two sounds through the headphones. Please remember both what you see and what you hear.
        Afterward, you will be shown one colored patch and hear one sound. If they match what you remembered, press the [Yes] key. Otherwise, press the [No] key.
        Press [Space] to begin the practice.
    KeyboardComponent confirm
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SFT_start
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You have completed the practice phase. The main experiment will now begin.
        There will be a short break between each block.
        Press [Space] to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent timeout
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break.
        Press Space to continue.
    KeyboardComponent breakend
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent EndExp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is finished.
        Please find the experimenter.
        Press Space after you read this text.
    KeyboardComponent callExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine studyintro
  Routine practice_intro
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stimuli/practice.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('color1_target', '#B25F16'), ('color1_H', '#CDA07A'), ('color1_L', '#BF5F00'), ('color1_H_deltaE', np.float64(36.8)), ('color1_L_deltaE', np.float64(12.55)), ('color2_target', '#D76467'), ('color2_H', '#A91B1A'), ('color2_L', '#C95243'), ('color2_H_deltaE', np.float64(28.99)), ('color2_L_deltaE', np.float64(14.06)), ('audio_target', 'zh'), ('audio_H', 'b'), ('audio_L', 'z'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(451)), ('audio_talker', 'T03'), ('audio_target_file', 'T03_azha.wav'), ('audio_H_file', 'T03_aba.wav'), ('audio_L_file', 'T0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,
      OrderedDict([('trial', np.int64(2)), ('color1_target', '#0069BD'), ('color1_H', '#004294'), ('color1_L', '#4868C3'), ('color1_H_deltaE', np.float64(16.24)), ('color1_L_deltaE', np.float64(13.18)), ('color2_target', '#0099CE'), ('color2_H', '#009ED6'), ('color2_L', '#009CE8'), ('color2_H_deltaE', np.float64(24.11)), ('color2_L_deltaE', np.float64(14.72)), ('audio_target', 'zh'), ('audio_H', 'sh'), ('audio_L', 'd'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(31)), ('audio_talker', 'T02'), ('audio_target_file', 'T02_azha.wav'), ('audio_H_file', 'T02_asha.wav'), ('audio_L_file', 'T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,
      OrderedDict([('trial', np.int64(3)), ('color1_target', '#5E59B6'), ('color1_H', '#08408D'), ('color1_L', '#6446AF'), ('color1_H_deltaE', np.float64(18.43)), ('color1_L_deltaE', np.float64(11.79)), ('color2_target', '#8A8E37'), ('color2_H', '#726C00'), ('color2_L', '#7A9B50'), ('color2_H_deltaE', np.float64(31.25)), ('color2_L_deltaE', np.float64(14.71)), ('audio_target', 'g'), ('audio_H', 's'), ('audio_L', 'v'), ('audio_H_count', np.int64(2)), ('audio_L_count', np.int64(197)), ('audio_talker', 'T12'), ('audio_target_file', 'T12_aga.wav'), ('audio_H_file', 'T12_asa.wav'), ('audio_L_file', 'T12_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,
      OrderedDict([('trial', np.int64(4)), ('color1_target', '#E75C9B'), ('color1_H', '#F30071'), ('color1_L', '#D13670'), ('color1_H_deltaE', np.float64(27.24)), ('color1_L_deltaE', np.float64(14.99)), ('color2_target', '#007D7D'), ('color2_H', '#003C46'), ('color2_L', '#00878B'), ('color2_H_deltaE', np.float64(27.3)), ('color2_L_deltaE', np.float64(6.26)), ('audio_target', 's'), ('audio_H', 'n'), ('audio_L', 'sh'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(57)), ('audio_talker', 'T12'), ('audio_target_file', 'T12_asa.wav'), ('audio_H_file', 'T12_ana.wav'), ('audio_L_file', 'T12_as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
    Routine study_stage
    LoopInitiator inner loopType="TrialHandler"
      loopType = random
      nReps = 9
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      conditions:
        [OrderedDict([('trial', np.int64(1)), ('audio1_target', 'p'), ('audio1_H', 'b'), ('audio1_L', 'k'), ('audio1_target_file', 'stimuli/T01_apa.wav'), ('audio1_H_file', 'stimuli/T02_aba.wav'), ('audio1_L_file', 'stimuli/T03_aka.wav'), ('audio2_target', 't'), ('audio2_H', 'g'), ('audio2_L', 'p'), ('audio2_target_file', 'stimuli/T04_ata.wav'), ('audio2_H_file', 'stimuli/T05_aga.wav'), ('audio2_L_file', 'stimuli/T06_apa.wav'), ('color1_target', '#0099D0'), ('color1_H', '#0082B1'), ('color1_L', '#0095CC'), ('color2_target', '#375BAB'), ('color2_H', '#005ECF'), ('color2_L', '#4361AC')]),
        OrderedDict([('trial', np.int64(2)), ('audio1_target', 'p'), ('audio1_H', 'd'), ('audio1_L', 't'), ('audio1_target_file', 'stimuli/T02_apa.wav'), ('audio1_H_file', 'stimuli/T03_ada.wav'), ('audio1_L_file', 'stimuli/T04_ata.wav'), ('audio2_target', 'k'), ('audio2_H', 'n'), ('audio2_L', 'p'), ('audio2_target_file', 'stimuli/T05_aka.wav'), ('audio2_H_file', 'stimuli/T06_ana.wav'), ('audio2_L_file', 'stimuli/T07_apa.wav'), ('color1_target', '#7B8F22'), ('color1_H', '#69AC15'), ('color1_L', '#7F8F22'), ('color2_target', '#009F6E'), ('color2_H', '#007A71'), ('color2_L', '#009F6B')]),
        OrderedDict([('trial', np.int64(3)), ('audio1_target', 'p'), ('audio1_H', 'v'), ('audio1_L', 'theta'), ('audio1_target_file', 'stimuli/T03_apa.wav'), ('audio1_H_file', 'stimuli/T04_ava.wav'), ('audio1_L_file', 'stimuli/T05_athetaa.wav'), ('audio2_target', 'f'), ('audio2_H', 'sh'), ('audio2_L', 'theta'), ('audio2_target_file', 'stimuli/T06_afa.wav'), ('audio2_H_file', 'stimuli/T07_asha.wav'), ('audio2_L_file', 'stimuli/T08_athetaa.wav'), ('color1_target', '#46812B'), ('color1_H', '#989900'), ('color1_L', '#4B8024'), ('color2_target', '#BA7949'), ('color2_H', '#D08D68'), ('color2_L', '#BD784F')]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,
        OrderedDict([('trial', np.int64(4)), ('audio1_target', 't'), ('audio1_H', 'g'), ('audio1_L', 'k'), ('audio1_target_file', 'stimuli/T04_ata.wav'), ('audio1_H_file', 'stimuli/T05_aga.wav'), ('audio1_L_file', 'stimuli/T06_aka.wav'), ('audio2_target', 'p'), ('audio2_H', 'b'), ('audio2_L', 'k'), ('audio2_target_file', 'stimuli/T07_apa.wav'), ('audio2_H_file', 'stimuli/T08_aba.wav'), ('audio2_L_file', 'stimuli/T09_aka.wav'), ('color1_target', '#A54253'), ('color1_H', '#89608F'), ('color1_L', '#A9455A'), ('color2_target', '#675DA2'), ('color2_H', '#384AB4'), ('color2_L', '#6359A2')])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
      Routine probe
      Routine feedback
    LoopTerminator inner
  LoopTerminator practice
  Routine SFT_start
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = stimuli/block1.csv
    loopType = random
    nReps = 25
    random seed = 45
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('color1_target', '#B83468'), ('color1_H', '#AB007D'), ('color1_L', '#B41B5F'), ('color1_H_deltaE', np.float64(25.36)), ('color1_L_deltaE', np.float64(6.63)), ('color2_target', '#198548'), ('color2_H', '#7B994D'), ('color2_L', '#117D4F'), ('color2_H_deltaE', np.float64(25.5)), ('color2_L_deltaE', np.float64(8.73)), ('audio_target', 't'), ('audio_H', 'z'), ('audio_L', 'p'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(109)), ('audio_talker', 'T09'), ('audio_target_file', 'T09_ata.wav'), ('audio_H_file', 'T09_aza.wav'), ('audio_L_file', 'T09_ap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,
      OrderedDict([('trial', np.int64(2)), ('color1_target', '#667CC3'), ('color1_H', '#B6B1CA'), ('color1_L', '#2E6CB1'), ('color1_H_deltaE', np.float64(34.62)), ('color1_L_deltaE', np.float64(11.54)), ('color2_target', '#00839E'), ('color2_H', '#0070A3'), ('color2_L', '#00A4C8'), ('color2_H_deltaE', np.float64(18.1)), ('color2_L_deltaE', np.float64(13.24)), ('audio_target', 's'), ('audio_H', 'eth'), ('audio_L', 'theta'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(84)), ('audio_talker', 'T09'), ('audio_target_file', 'T09_asa.wav'), ('audio_H_file', 'T09_aetha.wav'), ('audio_L_file',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,
      OrderedDict([('trial', np.int64(3)), ('color1_target', '#0094D6'), ('color1_H', '#0089B2'), ('color1_L', '#0098E6'), ('color1_H_deltaE', np.float64(18.6)), ('color1_L_deltaE', np.float64(7.91)), ('color2_target', '#B03B56'), ('color2_H', '#F9855D'), ('color2_L', '#B02B44'), ('color2_H_deltaE', np.float64(39.99)), ('color2_L_deltaE', np.float64(9.33)), ('audio_target', 'f'), ('audio_H', 'n'), ('audio_L', 's'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(18)), ('audio_talker', 'T08'), ('audio_target_file', 'T08_afa.wav'), ('audio_H_file', 'T08_ana.wav'), ('audio_L_file', 'T08_asa.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,
      OrderedDict([('trial', np.int64(4)), ('color1_target', '#BE5EA3'), ('color1_H', '#8659C4'), ('color1_L', '#D564BC'), ('color1_H_deltaE', np.float64(30.95)), ('color1_L_deltaE', np.float64(10.96)), ('color2_target', '#BF7827'), ('color2_H', '#CFA500'), ('color2_L', '#A56A02'), ('color2_H_deltaE', np.float64(30.5)), ('color2_L_deltaE', np.float64(9.1)), ('audio_target', 'eth'), ('audio_H', 's'), ('audio_L', 'v'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(81)), ('audio_talker', 'T01'), ('audio_target_file', 'T01_aetha.wav'), ('audio_H_file', 'T01_asa.wav'), ('audio_L_file', 'T01_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
    Routine study_stage
    LoopInitiator SFT1 loopType="TrialHandler"
      conditionsFile = 1stblock.csv
      loopType = random
      nReps = 32
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      conditions:
        [OrderedDict([('trial', np.int64(1)), ('audio1_target', 't'), ('audio1_H', 'z'), ('audio1_L', 'theta'), ('audio1_target_file', 'stimuli/T06_ata.wav'), ('audio1_H_file', 'stimuli/T07_aza.wav'), ('audio1_L_file', 'stimuli/T08_athetaa.wav'), ('audio2_target', 'f'), ('audio2_H', 'g'), ('audio2_L', 'p'), ('audio2_target_file', 'stimuli/T09_afa.wav'), ('audio2_H_file', 'stimuli/T10_aga.wav'), ('audio2_L_file', 'stimuli/T11_apa.wav'), ('color1_target', '#009484'), ('color1_H', '#00CBBE'), ('color1_L', '#009987'), ('color2_target', '#AA5CBA'), ('color2_H', '#5A62B0'), ('color2_L', '#AE5DBF')]),
        OrderedDict([('trial', np.int64(2)), ('audio1_target', 'k'), ('audio1_H', 'n'), ('audio1_L', 'p'), ('audio1_target_file', 'stimuli/T07_aka.wav'), ('audio1_H_file', 'stimuli/T08_ana.wav'), ('audio1_L_file', 'stimuli/T09_apa.wav'), ('audio2_target', 't'), ('audio2_H', 'g'), ('audio2_L', 'k'), ('audio2_target_file', 'stimuli/T10_ata.wav'), ('audio2_H_file', 'stimuli/T11_aga.wav'), ('audio2_L_file', 'stimuli/T12_aka.wav'), ('color1_target', '#A37E2A'), ('color1_H', '#B16E24'), ('color1_L', '#957321'), ('color2_target', '#008879'), ('color2_H', '#3E9952'), ('color2_L', '#008679')]),
        OrderedDict([('trial', np.int64(3)), ('audio1_target', 'k'), ('audio1_H', 'g'), ('audio1_L', 't'), ('audio1_target_file', 'stimuli/T08_aka.wav'), ('audio1_H_file', 'stimuli/T09_aga.wav'), ('audio1_L_file', 'stimuli/T10_ata.wav'), ('audio2_target', 'p'), ('audio2_H', 'd'), ('audio2_L', 'k'), ('audio2_target_file', 'stimuli/T11_apa.wav'), ('audio2_H_file', 'stimuli/T12_ada.wav'), ('audio2_L_file', 'stimuli/T01_aka.wav'), ('color1_target', '#14803C'), ('color1_H', '#00956D'), ('color1_L', '#1F8649'), ('color2_target', '#009294'), ('color2_H', '#379C7D'), ('color2_L', '#009097')]),
        OrderedDict([('trial', np.int64(4)), ('audio1_target', 'k'), ('audio1_H', 'z'), ('audio1_L', 'f'), ('audio1_target_file', 'stimuli/T09_aka.wav'), ('audio1_H_file', 'stimuli/T10_aza.wav'), ('audio1_L_file', 'stimuli/T11_afa.wav'), ('audio2_target', 'theta'), ('audio2_H', 'd'), ('audio2_L', 'f'), ('audio2_target_file', 'stimuli/T12_athetaa.wav'), ('audio2_H_file', 'stimuli/T01_ada.wav'), ('audio2_L_file', 'stimuli/T02_afa.wav'), ('color1_target', '#6284DF'), ('color1_H', '#A15A94'), ('color1_L', '#648CE5'), ('color2_target', '#9C5335'), ('color2_H', '#DB886B'), ('color2_L', '#96502C')])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
      Routine probe
    LoopTerminator SFT1
  LoopTerminator block1
  Routine rest
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = stimuli/block2.csv
    loopType = random
    nReps = 25
    random seed = 45
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('color1_target', '#00A48A'), ('color1_H', '#00605B'), ('color1_L', '#008E80'), ('color1_H_deltaE', np.float64(36.5)), ('color1_L_deltaE', np.float64(10.38)), ('color2_target', '#D56C94'), ('color2_H', '#F83BA8'), ('color2_L', '#E986BB'), ('color2_H_deltaE', np.float64(34.3)), ('color2_L_deltaE', np.float64(12.69)), ('audio_target', 'z'), ('audio_H', 'sh'), ('audio_L', 'v'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(48)), ('audio_talker', 'T06'), ('audio_target_file', 'T06_aza.wav'), ('audio_H_file', 'T06_asha.wav'), ('audio_L_file', 'T06_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,
      OrderedDict([('trial', np.int64(2)), ('color1_target', '#0087A1'), ('color1_H', '#0095AB'), ('color1_L', '#10879D'), ('color1_H_deltaE', np.float64(31.75)), ('color1_L_deltaE', np.float64(10.84)), ('color2_target', '#AB3469'), ('color2_H', '#6B0025'), ('color2_L', '#C3587B'), ('color2_H_deltaE', np.float64(25.57)), ('color2_L_deltaE', np.float64(12.97)), ('audio_target', 'zh'), ('audio_H', 's'), ('audio_L', 'g'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(25)), ('audio_talker', 'T08'), ('audio_target_file', 'T08_azha.wav'), ('audio_H_file', 'T08_asa.wav'), ('audio_L_file', 'T08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,
      OrderedDict([('trial', np.int64(3)), ('color1_target', '#0098AC'), ('color1_H', '#00C5C8'), ('color1_L', '#00778C'), ('color1_H_deltaE', np.float64(18.94)), ('color1_L_deltaE', np.float64(12.56)), ('color2_target', '#6C6FD6'), ('color2_H', '#494A93'), ('color2_L', '#7158B7'), ('color2_H_deltaE', np.float64(21.49)), ('color2_L_deltaE', np.float64(11.66)), ('audio_target', 'n'), ('audio_H', 'zh'), ('audio_L', 'm'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(57)), ('audio_talker', 'T03'), ('audio_target_file', 'T03_ana.wav'), ('audio_H_file', 'T03_azha.wav'), ('audio_L_file', 'T03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,
      OrderedDict([('trial', np.int64(4)), ('color1_target', '#B6425C'), ('color1_H', '#A73D38'), ('color1_L', '#B23057'), ('color1_H_deltaE', np.float64(17.31)), ('color1_L_deltaE', np.float64(6.72)), ('color2_target', '#748B26'), ('color2_H', '#756D05'), ('color2_L', '#8F9A33'), ('color2_H_deltaE', np.float64(17.97)), ('color2_L_deltaE', np.float64(8.57)), ('audio_target', 'v'), ('audio_H', 's'), ('audio_L', 'z'), ('audio_H_count', np.int64(2)), ('audio_L_count', np.int64(88)), ('audio_talker', 'T04'), ('audio_target_file', 'T04_ava.wav'), ('audio_H_file', 'T04_asa.wav'), ('audio_L_file', 'T04_aza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
    Routine study_stage
    LoopInitiator SFT_2 loopType="TrialHandler"
      Selected rows = 33
      conditionsFile = 2ndblock.csv
      loopType = random
      nReps = 9
      random seed = 45
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      conditions:
        [OrderedDict([('trial', np.int64(1)), ('audio1_target', 'sh'), ('audio1_H', 'm'), ('audio1_L', 't'), ('audio1_target_file', 'stimuli/T09_asha.wav'), ('audio1_H_file', 'stimuli/T10_ama.wav'), ('audio1_L_file', 'stimuli/T11_ata.wav'), ('audio2_target', 's'), ('audio2_H', 'eth'), ('audio2_L', 'f'), ('audio2_target_file', 'stimuli/T12_asa.wav'), ('audio2_H_file', 'stimuli/T01_aetha.wav'), ('audio2_L_file', 'stimuli/T02_afa.wav'), ('color1_target', '#499763'), ('color1_H', '#007A54'), ('color1_L', '#519962'), ('color2_target', '#00815F'), ('color2_H', '#007C52'), ('color2_L', '#008262')]),
        OrderedDict([('trial', np.int64(2)), ('audio1_target', 'b'), ('audio1_H', 'n'), ('audio1_L', 'v'), ('audio1_target_file', 'stimuli/T10_aba.wav'), ('audio1_H_file', 'stimuli/T11_ana.wav'), ('audio1_L_file', 'stimuli/T12_ava.wav'), ('audio2_target', 'd'), ('audio2_H', 'b'), ('audio2_L', 'g'), ('audio2_target_file', 'stimuli/T01_ada.wav'), ('audio2_H_file', 'stimuli/T02_aba.wav'), ('audio2_L_file', 'stimuli/T03_aga.wav'), ('color1_target', '#0080C6'), ('color1_H', '#00B8FF'), ('color1_L', '#0083CD'), ('color2_target', '#66924C'), ('color2_H', '#006300'), ('color2_L', '#5A8D47')]),
        OrderedDict([('trial', np.int64(3)), ('audio1_target', 'b'), ('audio1_H', 'zh'), ('audio1_L', 'eth'), ('audio1_target_file', 'stimuli/T11_aba.wav'), ('audio1_H_file', 'stimuli/T12_azha.wav'), ('audio1_L_file', 'stimuli/T01_aetha.wav'), ('audio2_target', 'g'), ('audio2_H', 's'), ('audio2_L', 'v'), ('audio2_target_file', 'stimuli/T02_aga.wav'), ('audio2_H_file', 'stimuli/T03_asa.wav'), ('audio2_L_file', 'stimuli/T04_ava.wav'), ('color1_target', '#7583E1'), ('color1_H', '#0060CA'), ('color1_L', '#7388E4'), ('color2_target', '#9C6612'), ('color2_H', '#840A00'), ('color2_L', '#9E661E')]),
        OrderedDict([('trial', np.int64(4)), ('audio1_target', 'b'), ('audio1_H', 'p'), ('audio1_L', 'z'), ('audio1_target_file', 'stimuli/T12_aba.wav'), ('audio1_H_file', 'stimuli/T01_apa.wav'), ('audio1_L_file', 'stimuli/T02_aza.wav'), ('audio2_target', 'd'), ('audio2_H', 'theta'), ('audio2_L', 'zh'), ('audio2_target_file', 'stimuli/T03_ada.wav'), ('audio2_H_file', 'stimuli/T04_athetaa.wav'), ('audio2_L_file', 'stimuli/T05_azha.wav'), ('color1_target', '#00817A'), ('color1_H', '#004242'), ('color1_L', '#007E79'), ('color2_target', '#C0608F'), ('color2_H', '#B889A2'), ('color2_L', '#C46195')])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
      Routine probe
    LoopTerminator SFT_2
  LoopTerminator block2
  Routine rest
  LoopInitiator block3 loopType="TrialHandler"
    conditionsFile = stimuli/block3.csv
    loopType = random
    nReps = 25
    random seed = 45
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('color1_target', '#5978C3'), ('color1_H', '#005CD2'), ('color1_L', '#3C90D8'), ('color1_H_deltaE', np.float64(29.24)), ('color1_L_deltaE', np.float64(14.19)), ('color2_target', '#C76563'), ('color2_H', '#6F4D12'), ('color2_L', '#D45A5F'), ('color2_H_deltaE', np.float64(39.8)), ('color2_L_deltaE', np.float64(10.28)), ('audio_target', 'v'), ('audio_H', 's'), ('audio_L', 'eth'), ('audio_H_count', np.int64(2)), ('audio_L_count', np.int64(379)), ('audio_talker', 'T08'), ('audio_target_file', 'T08_ava.wav'), ('audio_H_file', 'T08_asa.wav'), ('audio_L_file', 'T0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,
      OrderedDict([('trial', np.int64(2)), ('color1_target', '#0099A9'), ('color1_H', '#34EBFF'), ('color1_L', '#00BFD6'), ('color1_H_deltaE', np.float64(30.74)), ('color1_L_deltaE', np.float64(14.39)), ('color2_target', '#887B1D'), ('color2_H', '#133C00'), ('color2_L', '#7C6B0E'), ('color2_H_deltaE', np.float64(38.77)), ('color2_L_deltaE', np.float64(6.42)), ('audio_target', 'n'), ('audio_H', 'b'), ('audio_L', 'z'), ('audio_H_count', np.int64(3)), ('audio_L_count', np.int64(7)), ('audio_talker', 'T06'), ('audio_target_file', 'T06_ana.wav'), ('audio_H_file', 'T06_aba.wav'), ('audio_L_file', 'T06_aza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,
      OrderedDict([('trial', np.int64(3)), ('color1_target', '#8F80C8'), ('color1_H', '#0050AF'), ('color1_L', '#8681B3'), ('color1_H_deltaE', np.float64(31.26)), ('color1_L_deltaE', np.float64(13.25)), ('color2_target', '#288D61'), ('color2_H', '#627D83'), ('color2_L', '#3D7F42'), ('color2_H_deltaE', np.float64(38.42)), ('color2_L_deltaE', np.float64(13.13)), ('audio_target', 'z'), ('audio_H', 'p'), ('audio_L', 'v'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(48)), ('audio_talker', 'T01'), ('audio_target_file', 'T01_aza.wav'), ('audio_H_file', 'T01_apa.wav'), ('audio_L_file', 'T01_a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,
      OrderedDict([('trial', np.int64(4)), ('color1_target', '#879325'), ('color1_H', '#E3B14A'), ('color1_L', '#7D8E00'), ('color1_H_deltaE', np.float64(31.47)), ('color1_L_deltaE', np.float64(8.25)), ('color2_target', '#009AE8'), ('color2_H', '#00C0FF'), ('color2_L', '#00A1DC'), ('color2_H_deltaE', np.float64(17.62)), ('color2_L_deltaE', np.float64(14.34)), ('audio_target', 't'), ('audio_H', 'eth'), ('audio_L', 'theta'), ('audio_H_count', np.int64(1)), ('audio_L_count', np.int64(9)), ('audio_talker', 'T10'), ('audio_target_file', 'T10_ata.wav'), ('audio_H_file', 'T10_aetha.wav'), ('audio_L_file', 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
    Routine study_stage
    LoopInitiator SFT_3 loopType="TrialHandler"
      loopType = random
      nReps = 9
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      Routine probe
    LoopTerminator SFT_3
  LoopTerminator block3
  LoopInitiator block4 loopType="TrialHandler"
    loopType = random
    nReps = 25
    random seed = 45
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    Routine study_stage
    LoopInitiator SFT_4 loopType="TrialHandler"
      loopType = random
      nReps = 9
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      Routine probe
    LoopTerminator SFT_4
  LoopTerminator block4
  Routine rest
  LoopInitiator block5 loopType="TrialHandler"
    loopType = random
    nReps = 25
    random seed = 45
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    Routine study_stage
    LoopInitiator SFT_5 loopType="TrialHandler"
      loopType = random
      nReps = 9
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      Routine probe
    LoopTerminator SFT_5
  LoopTerminator block5
  Routine rest
  LoopInitiator block6 loopType="TrialHandler"
    loopType = random
    nReps = 25
    random seed = 45
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    Routine study_stage
    LoopInitiator SFT_6 loopType="TrialHandler"
      loopType = random
      nReps = 9
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      Routine probe
    LoopTerminator SFT_6
  LoopTerminator block6
  Routine End
