PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = #808080
  colorSpace = hex
  expName = VAWM
  keyboardBackend = PsychToolbox
  runMode = 1
  srEnableInterfaceWithoutConnection = False
  srFileSampleFiltering = FILTER_LEVEL_OFF
  srLiveSampleFiltering = FILTER_LEVEL_OFF
  srModelName = EYELINK 1000 DESKTOP
  srNativeDataFileName = et_data
  srNetIP4Address = 100.1.1.1
  srSamplingRate = 250
  srSimulationMode = False
  srTrackEyes = RIGHT_EYE
  srVOGPupilCenterAlgorithm = ELLIPSE_FIT
  srVOGPupilMeasureTypes = PUPIL_AREA
  srVOGTrackingMode = PUPIL_CR_TRACKING
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Routines
  Routine study_stage
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    CodeComponent StudyCode
      Code Type = Py
      Before Experiment:
        # 音訊輸出裝置：見 audio_pick.py
        import sys
        from audio_pick import setup_from_argv
        AUDIO = setup_from_argv(sys.argv)
      Begin Experiment:
        # ═══════════ 0. 設定（要改的數字都在這） ═══════════
        import os, sys, json, time
        import numpy as np
        os.chdir(_thisDir)                                   # 刺激檔是相對路徑 stimuli/...
        LEVELS_COLOUR = [2.0, 6.0, 12.0, 25.0, 50.0, 90.0]   # 校準用的顏色距離 dE（目標 8.0 的 H 很大，開到 90）
        LEVELS_AUDIO  = [-2.6, -2.1, -1.6, -1.1, -0.7, -0.3] # 校準用的子音不相似度 = -log10(混淆次數+1)
        N_PER_LEVEL = 5                                      # 每個強度幾試 -> 6×5 = 30 試「不同」
        P_MATCH = 1 / 4                                      # 再加 1/4「相同」試 -> 共 40 試
        N_WARMUP = 4                                         # 校準前的暖機試次，有回饋、不進擬合
        H_TARG, L_TARG = 8.0, 1.3                            # 漂移差目標：容易 H / 困難 L（Houpt 原設定，DECISIONS 3）
        FIT_KW = dict(tune=1000, draws=1000, chains=4, nuts_sampler="nutpie")
        RT_MIN, RT_MAX = 0.15, 3.0
        N_BLOCKS, SETS_PER_BLOCK, N_PRACTICE_SETS = 6, 14, 2
        N_CALIB = int(len(LEVELS_COLOUR) * N_PER_LEVEL * (1 + P_MATCH / (1 - P_MATCH)) + 0.5)   # = 40（另一維度 = T，進擬合）
        N_FILLER = 8              # 另一維度 H/L 的填充試（答案一定 N、不進擬合）
        N_CALIB_TOTAL = N_CALIB + N_FILLER
        OTHER_TARGETS_CHANGE = False  # False = nochange：另一維度的靶整區塊固定；True = change：每試重抽靶。兩版另一維度探測都抽 T/H/L
        PROV_DE_H, PROV_DE_L = 30.0, 6.0
        PROV_COUNT_H, PROV_COUNT_L = 10, 200
        FIXED_PAIR = None
        FIXED_COLS = {}

        # ═══════════ 1. 借來的數學 ═══════════
        from adaptive_vawm import (TALKERS, audio_x, count_from_x, delta_e, find_colour_at, foil_for,
                                   from_model_units, lab_to_hex, load_confusion, load_full_package, random_target,
                                   sound_file, to_model_units)
        CONFUSION = load_confusion(); CONSONANTS = sorted(CONFUSION)
        rng = np.random.default_rng()
        PHASE = None                     # 'calib_colour' / 'calib_audio' / 'practice' / 'main'，由各 intro routine 設定
        CALIB = {}                       # 校到的 H / L
        calib_log = []                   # 校準每一試
        probe_plan = []                  # 這一組接下來的 9 個條件

        def two_targets():
            t1 = random_target(rng); t2 = random_target(rng, avoid=[t1])
            s1, s2 = rng.choice(CONSONANTS, 2, replace=False); k1, k2 = rng.choice(TALKERS, 2)
            return t1, t2, str(s1), str(s2), str(k1), str(k2)

        def calib_plan(levels):          # (正在校維度的等級, 另一維度等級)：72 試 other=T + 24 填充 other=H/L，打散
            plan = [(x, 'T') for x in levels for _ in range(N_PER_LEVEL)]
            plan += [(None, 'T')] * int(round(len(plan) * P_MATCH / (1 - P_MATCH)))
            plan += [(rng.choice(levels + [None]), lev) for lev in ['H', 'L'] * (N_FILLER // 2)]
            plan = [(None if x is None else float(x), o) for x, o in plan]
            rng.shuffle(plan); return plan

        def warmup_plan(levels):         # 暖機：AA 與最容易層級交替（None, 最容易, None, 最容易, ...）
            easiest = levels[-1]
            return [(None, 'T'), (easiest, 'T')] * (N_WARMUP // 2)

        def foil_near(cons, count):      # 目標子音的干擾子音裡，混淆次數最接近 count 的
            cands = CONFUSION[cons]
            return cands[int(np.argmin([abs(np.log10(c + 1) - np.log10(count + 1)) for _, c in cands]))][0]

        def make_study_set():            # 主實驗的一組：2 目標色各有 H/L 版本、2 目標音各有 H/L 干擾子音
            de_h, de_l = CALIB['colour']['high'], CALIB['colour']['low']
            cnt_h, cnt_l = CALIB['audio']['count_high'], CALIB['audio']['count_low']
            for _ in range(200):
                t1, t2, s1, s2, k1, k2 = two_targets()
                cols = [find_colour_at(t, de, rng) for t in (t1, t2) for de in (de_h, de_l)]
                if all(c is not None for c in cols): break
            else:
                raise RuntimeError("色域內找不到符合 dE_H / dE_L 的顏色")
            h1, l1, h2, l2 = cols
            return dict(color1_target=lab_to_hex(t1), color1_H=lab_to_hex(h1), color1_L=lab_to_hex(l1),
                        color2_target=lab_to_hex(t2), color2_H=lab_to_hex(h2), color2_L=lab_to_hex(l2),
                        audio1_target_file=sound_file(k1, s1), audio1_H_file=sound_file(k1, foil_near(s1, cnt_h)),
                        audio1_L_file=sound_file(k1, foil_near(s1, cnt_l)),
                        audio2_target_file=sound_file(k2, s2), audio2_H_file=sound_file(k2, foil_near(s2, cnt_h)),
                        audio2_L_file=sound_file(k2, foil_near(s2, cnt_l)))

        # 條件編號與名字跟 VAWM_nobox.py 一樣：(名字, 探測色欄位, 探測音欄位)；偶數 = 第 1 個目標、奇數 = 第 2 個
        # ⚠ 名字字母順序原版就不一致（HA/LA = 聲音 H/L；AH/AL = 顏色 H/L；HH/LH/HL/LL = 顏色,聲音）；計分只看 AA，看欄位別看名字
        COND = {0: ("AA", "color1_target", "audio1_target_file"), 1: ("AA", "color2_target", "audio2_target_file"),
                2: ("HA", "color1_target", "audio1_H_file"),      3: ("HA", "color2_target", "audio2_H_file"),
                4: ("LA", "color1_target", "audio1_L_file"),      5: ("LA", "color2_target", "audio2_L_file"),
                6: ("AH", "color1_H", "audio1_target_file"),      7: ("AH", "color2_H", "audio2_target_file"),
                8: ("HH", "color1_H", "audio1_H_file"),           9: ("HH", "color2_H", "audio2_H_file"),
                10: ("LH", "color1_L", "audio1_H_file"),          11: ("LH", "color2_L", "audio2_H_file"),
                12: ("AL", "color1_L", "audio1_target_file"),     13: ("AL", "color2_L", "audio2_target_file"),
                14: ("HL", "color1_H", "audio1_L_file"),          15: ("HL", "color2_H", "audio2_L_file"),
                16: ("LL", "color1_L", "audio1_L_file"),          17: ("LL", "color2_L", "audio2_L_file")}

        def set_probes():                # 16 個：AA ×4、單 distractor 各 ×2、雙 distractor 各 ×1（Houpt et al. 2014 Table 3，target 併成一個水準），打散
            plan = [(0, 1)] * 4 + [(2, 3), (4, 5), (6, 7), (12, 13)] * 2 + [(8, 9), (10, 11), (14, 15), (16, 17)]
            c = [int(rng.choice(p)) for p in plan]
            rng.shuffle(c); return c

        def fit_dim(dim):                # 72 試 -> lnrm2 -> H / L（原始 adaptiveSFT）
            levels = LEVELS_COLOUR if dim == 'colour' else LEVELS_AUDIO
            load_full_package()
            from adaptivesft.models import make_data
            from adaptivesft.models_v2 import fit_lnrm_v2 as fit_lnrm   # PyMC 內建 LogNormal logp/logcdf 版（DECISIONS 14）
            from adaptivesft.salience import find_salience
            use = [r for r in calib_log if r['dim'] == dim and r['other'] == 'T' and not r['is_match'] and r['key'] is not None
                   and RT_MIN <= r['rt'] <= RT_MAX]
            data = make_data([to_model_units(dim, r['x']) for r in use], [r['rt'] for r in use], [r['correct'] for r in use])
            trace = fit_lnrm(data, link='quadratic', **FIT_KW)
            res = find_salience(trace, h_targ=H_TARG, l_targ=L_TARG, alpha2_rule='filter')
            high, low = from_model_units(dim, res['high']['intensity']), from_model_units(dim, res['low']['intensity'])
            lo_lim, hi_lim = min(levels), max(levels)
            if not (np.isfinite(high) and np.isfinite(low)):
                print(f"[{dim}] 擬合解不出 H/L，暫用中間層級；要重校"); high, low = levels[-2], levels[1]
            in_range = bool(lo_lim <= low < high <= hi_lim)
            if not in_range:
                print(f"[{dim}] H={high:.2f} L={low:.2f} 超出範圍 [{lo_lim},{hi_lim}]，已夾回；要重校")
                high, low = float(np.clip(high, lo_lim, hi_lim)), float(np.clip(low, lo_lim, hi_lim))
                if low >= high: low = lo_lim
            out = dict(high=float(high), low=float(low), in_range=in_range, n_used=len(use), warnings=list(res['warnings']))
            if dim == 'audio':
                out['count_high'], out['count_low'] = float(count_from_x(high)), float(count_from_x(low))
            print(f"[{dim}] H={out['high']:.2f} L={out['low']:.2f} in_range={in_range} {out['warnings']}")
            return out
      Begin Routine:
        if PHASE in ('calib_colour', 'calib_audio', 'warm_colour', 'warm_audio'):
            is_warmup = PHASE.startswith('warm_')
            dim = 'colour' if PHASE.endswith('colour') else 'audio'
            loop = (calibCw if dim == 'colour' else calibAw) if is_warmup else (calibC if dim == 'colour' else calibA)
            if is_warmup and loop.thisN == 0:
                plan = warmup_plan(LEVELS_COLOUR if dim == 'colour' else LEVELS_AUDIO)
                FIXED_PAIR = two_targets()                       # nochange：另一維度整區塊固定的靶（暖機+正式 72 試共用）
                FIXED_COLS = {}                                  # nochange 校聲音：固定靶的 H/L 色只算一次
                if not OTHER_TARGETS_CHANGE and dim == 'audio':
                    for wi, tcol in enumerate(FIXED_PAIR[:2]):
                        for lev, de in (('H', PROV_DE_H), ('L', PROV_DE_L)):
                            lab = find_colour_at(tcol, de, rng)
                            FIXED_COLS[(wi, lev)] = lab_to_hex(lab if lab is not None else tcol)
            elif not is_warmup and loop.thisN == 0:
                plan = calib_plan(LEVELS_COLOUR if dim == 'colour' else LEVELS_AUDIO)
            x_planned, other = plan[loop.thisN]
            dim_match = x_planned is None                        # 正在校的維度一樣嗎（擬合用）
            is_match = dim_match and other == 'T'                # 受試者的規則：兩個都一樣才 Y
            t1, t2, s1, s2, k1, k2 = two_targets()               # change：每試新的靶
            if not OTHER_TARGETS_CHANGE:
                if dim == 'colour':
                    s1, s2, k1, k2 = FIXED_PAIR[2:]
                else:
                    t1, t2 = FIXED_PAIR[:2]
            which = int(rng.integers(2))
            target_col, target_snd, talker = [t1, t2][which], [s1, s2][which], [k1, k2][which]
            if dim == 'colour':                                  # 校顏色：顏色走層級，聲音 T 或暫定 H/L
                probe_lab = target_col if dim_match else find_colour_at(target_col, x_planned, rng)
                if probe_lab is None: probe_lab = target_col
                x_actual = delta_e(target_col, probe_lab)
                targetCol = lab_to_hex(probe_lab)
                targetAud = sound_file(talker, target_snd if other == 'T' else foil_near(target_snd, PROV_COUNT_H if other == 'H' else PROV_COUNT_L))
            else:                                                # 校聲音：聲音走層級，顏色 T 或暫定 H/L
                foil, count = (target_snd, 0) if dim_match else foil_for(CONFUSION, target_snd, x_planned)
                x_actual = audio_x(count)
                targetAud = sound_file(talker, foil)
                if other == 'T':
                    targetCol = lab_to_hex(target_col)
                elif (which, other) in FIXED_COLS:
                    targetCol = FIXED_COLS[(which, other)]
                else:
                    lab = find_colour_at(target_col, PROV_DE_H if other == 'H' else PROV_DE_L, rng)
                    targetCol = lab_to_hex(lab if lab is not None else target_col)
            color1_target, color2_target = lab_to_hex(t1), lab_to_hex(t2)
            audio1_target_file, audio2_target_file = sound_file(k1, s1), sound_file(k2, s2)
            condition, cond_name = -1, 'AA' if is_match else ('warm' if is_warmup else 'calib')
        else:                                                    # practice / main：一組 2 色 2 音 + 16 個探測
            st = make_study_set()
            color1_target, color1_H, color1_L = st['color1_target'], st['color1_H'], st['color1_L']
            color2_target, color2_H, color2_L = st['color2_target'], st['color2_H'], st['color2_L']
            audio1_target_file, audio1_H_file, audio1_L_file = st['audio1_target_file'], st['audio1_H_file'], st['audio1_L_file']
            audio2_target_file, audio2_H_file, audio2_L_file = st['audio2_target_file'], st['audio2_H_file'], st['audio2_L_file']
            probe_plan = set_probes()
    TextComponent Fix
      colorSpace = named
      letterHeight = .2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
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    PolygonComponent stim1
      colorSpace = hex
      fillColor [set every repeat] = $color1_target
      lineColor = #808080
      opacity [set every repeat] = 1
      pos [set every repeat] = (-200, 0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent stim2
      colorSpace = hex
      fillColor [set every repeat] = $color2_target
      lineColor = #808080
      pos [set every repeat] = (200,0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1
      units = pix
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    SoundComponent audi1
      deviceLabel = speakers
      forceEndRoutine = False
      sound [set every repeat] = $audio1_target_file
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 1
      volume [set every repeat] = 1
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    SoundComponent audi2
      deviceLabel = Dell
      forceEndRoutine = False
      sound [set every repeat] = $audio2_target_file
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1
      volume [set every repeat] = 1
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  Routine probe
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    CodeComponent ProbeCode
      Code Type = Py
      Begin Routine:
        if PHASE in ('practice', 'main'):                        # 校準時 targetCol / targetAud 已在 study_stage 決定
            condition = probe_plan.pop(0)
            cond_name, col_key, snd_key = COND[condition]
            targetCol, targetAud = st[col_key], st[snd_key]
            is_match = (cond_name == 'AA')
      End Routine:
        key = ResponseBox.keys if ResponseBox.keys not in ('', [], None) else None
        rt = ResponseBox.rt if key is not None else None
        correct = None if key is None else int(key == ('y' if is_match else 'n'))
        thisExp.addData('phase', PHASE); thisExp.addData('condition', condition); thisExp.addData('cond_name', cond_name)
        thisExp.addData('targetCol', targetCol); thisExp.addData('targetAud', targetAud)
        thisExp.addData('is_match', int(is_match)); thisExp.addData('correct', correct)
        if PHASE in ('calib_colour', 'calib_audio', 'warm_colour', 'warm_audio'):
            thisExp.addData('x', x_actual)
            if PHASE in ('calib_colour', 'calib_audio'):          # 暖機不進 calib_log（擬合只用正式試次）
                calib_log.append(dict(dim='colour' if PHASE == 'calib_colour' else 'audio', is_match=dim_match, other=other,
                                      x=x_actual, key=key, rt=rt, correct=correct))
        resp = 'No response' if key is None else ('Correct' if correct else 'Wrong')
    TextComponent Fixation
      letterHeight = 12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      text = +
      units = pix
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    PolygonComponent targetV
      colorSpace = hex
      fillColor [set every repeat] = $targetCol
      lineColor = #808080
      pos [set every repeat] = (0,0)
      shape = rectangle
      size = (100,100)
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
      units = pix
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    SoundComponent targetA
      deviceLabel = speakers
      forceEndRoutine = False
      sound [set every repeat] = $targetAud
      startVal [time (s)] = .3
      stopVal [duration (s)] = 1
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    KeyboardComponent ResponseBox
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 3.0
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  Routine practice_intro
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    CodeComponent code_practice_intro
      Code Type = Py
      Begin Routine:
        PHASE = 'practice'
    TextComponent prac_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 3 of 3: the main task. First, a short practice.

        On each trial you will first see two coloured squares and hear two speech sounds. Try to remember them.
        Then one colour will appear together with one sound.

        If the colour AND the sound are both the same as before, press Y.
        If anything is different, press N.
        After each pair you will answer nine questions in a row. Feedback is shown during practice only.

        Press the space bar to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # resp 已在 probe 的 End Routine 算好（'正確' / '錯誤' / '沒有作答'）
    TextComponent answer
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $resp
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  Routine studyintro
    CodeComponent code_2
      Code Type = Py
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment.
        In this task, you will see colored patches on the screen and hear two sounds through the headphones. Please remember both what you see and what you hear.
        Afterward, you will be shown one colored patch and hear one sound. If they match what you remembered, press the [Yes] key. Otherwise, press the [No] key.
        Press [Space] to begin the practice.
    KeyboardComponent confirm
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SFT_start
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    CodeComponent code_SFT_start
      Code Type = Py
      Begin Routine:
        PHASE = 'main'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Main task

        On each trial you will first see two coloured squares and hear two speech sounds. Try to remember them.
        Then one colour will appear together with one sound.

        If the colour AND the sound are both the same as before, press Y.
        If anything is different, press N.
        Same rules as the practice. There is no feedback from now on. Answer as accurately as you can; speed is not important.

        Press the space bar to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        if blocks.thisN == N_BLOCKS - 1:        # 最後一個 block 後不休息
            continueRoutine = False
    TextComponent timeout
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break.
        Press Space to continue.
    KeyboardComponent breakend
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent EndExp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is finished.
        Please find the experimenter.
        Press Space after you read this text.
    KeyboardComponent callExp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibC_intro
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    CodeComponent code_calibC_intro
      Code Type = Py
      Begin Routine:
        PHASE = 'warm_colour'
    TextComponent prac_intro_calibC_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1 of 3: colour calibration (96 trials)

        On each trial you will first see two coloured squares and hear two speech sounds. Try to remember them. Then one colour will appear together with one sound.

        Did this colour AND this sound both appear a moment ago?
           Y = yes, both of them did.      N = no, at least one of them is different.

        First, 8 practice trials with feedback. Then 96 trials without feedback.

        Press the space bar to begin.
    KeyboardComponent key_resp_2_calibC_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibA_intro
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    CodeComponent code_calibA_intro
      Code Type = Py
      Begin Routine:
        PHASE = 'warm_audio'
    TextComponent prac_intro_calibA_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 2 of 3: sound calibration (96 trials)

        On each trial you will first see two coloured squares and hear two speech sounds. Try to remember them. Then one colour will appear together with one sound.

        Did this colour AND this sound both appear a moment ago?
           Y = yes, both of them did.      N = no, at least one of them is different.

        First, 8 practice trials with feedback. Then 96 trials without feedback.

        Press the space bar to begin.
    KeyboardComponent key_resp_2_calibA_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibCw_done
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    CodeComponent code_calibCw_done
      Code Type = Py
      Begin Routine:
        PHASE = 'calib_colour'
    TextComponent prac_intro_calibCw_done
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice done. From now on there is no feedback.

        Press the space bar to continue.
    KeyboardComponent key_resp_2_calibCw_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibAw_done
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    CodeComponent code_calibAw_done
      Code Type = Py
      Begin Routine:
        PHASE = 'calib_audio'
    TextComponent prac_intro_calibAw_done
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice done. From now on there is no feedback.

        Press the space bar to continue.
    KeyboardComponent key_resp_2_calibAw_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fit_msg
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    CodeComponent code_fit_msg
      Code Type = Py
    TextComponent prac_intro_fit_msg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Calculating... this takes about a minute. Please wait.
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    KeyboardComponent key_resp_2_fit_msg
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fit
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    CodeComponent code_fit
      Code Type = Py
      Begin Routine:
        dim = 'colour' if PHASE == 'calib_colour' else 'audio'
        CALIB[dim] = fit_dim(dim)
        with open(os.path.join('data', expInfo['participant'] + '_simple_calib.json'), 'w', encoding='utf-8') as f:
            json.dump(dict(info=dict(participant=expInfo['participant'], method='lnrm', h_targ=H_TARG, l_targ=L_TARG),
                           colour=CALIB.get('colour'), audio=CALIB.get('audio')), f, ensure_ascii=False, indent=2)
        continueRoutine = False
Flow
  Routine studyintro
  Routine calibC_intro
  LoopInitiator calibCw loopType="TrialHandler"
    loopType = sequential
    nReps = N_WARMUP
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('audio1_target', 'p'), ('audio1_H', 'b'), ('audio1_L', 'k'), ('audio1_target_file', 'stimuli/T01_apa.wav'), ('audio1_H_file', 'stimuli/T02_aba.wav'), ('audio1_L_file', 'stimuli/T03_aka.wav'), ('audio2_target', 't'), ('audio2_H', 'g'), ('audio2_L', 'p'), ('audio2_target_file', 'stimuli/T04_ata.wav'), ('audio2_H_file', 'stimuli/T05_aga.wav'), ('audio2_L_file', 'stimuli/T06_apa.wav'), ('color1_target', '#0099D0'), ('color1_H', '#0082B1'), ('color1_L', '#0095CC'), ('color2_target', '#375BAB'), ('color2_H', '#005ECF'), ('color2_L', '#4361AC')]),
      OrderedDict([('trial', np.int64(2)), ('audio1_target', 'p'), ('audio1_H', 'd'), ('audio1_L', 't'), ('audio1_target_file', 'stimuli/T02_apa.wav'), ('audio1_H_file', 'stimuli/T03_ada.wav'), ('audio1_L_file', 'stimuli/T04_ata.wav'), ('audio2_target', 'k'), ('audio2_H', 'n'), ('audio2_L', 'p'), ('audio2_target_file', 'stimuli/T05_aka.wav'), ('audio2_H_file', 'stimuli/T06_ana.wav'), ('audio2_L_file', 'stimuli/T07_apa.wav'), ('color1_target', '#7B8F22'), ('color1_H', '#69AC15'), ('color1_L', '#7F8F22'), ('color2_target', '#009F6E'), ('color2_H', '#007A71'), ('color2_L', '#009F6B')]),
      OrderedDict([('trial', np.int64(3)), ('audio1_target', 'p'), ('audio1_H', 'v'), ('audio1_L', 'theta'), ('audio1_target_file', 'stimuli/T03_apa.wav'), ('audio1_H_file', 'stimuli/T04_ava.wav'), ('audio1_L_file', 'stimuli/T05_athetaa.wav'), ('audio2_target', 'f'), ('audio2_H', 'sh'), ('audio2_L', 'theta'), ('audio2_target_file', 'stimuli/T06_afa.wav'), ('audio2_H_file', 'stimuli/T07_asha.wav'), ('audio2_L_file', 'stimuli/T08_athetaa.wav'), ('color1_target', '#46812B'), ('color1_H', '#989900'), ('color1_L', '#4B8024'), ('color2_target', '#BA7949'), ('color2_H', '#D08D68'), ('color2_L', '#BD784F')]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,
      OrderedDict([('trial', np.int64(4)), ('audio1_target', 't'), ('audio1_H', 'g'), ('audio1_L', 'k'), ('audio1_target_file', 'stimuli/T04_ata.wav'), ('audio1_H_file', 'stimuli/T05_aga.wav'), ('audio1_L_file', 'stimuli/T06_aka.wav'), ('audio2_target', 'p'), ('audio2_H', 'b'), ('audio2_L', 'k'), ('audio2_target_file', 'stimuli/T07_apa.wav'), ('audio2_H_file', 'stimuli/T08_aba.wav'), ('audio2_L_file', 'stimuli/T09_aka.wav'), ('color1_target', '#A54253'), ('color1_H', '#89608F'), ('color1_L', '#A9455A'), ('color2_target', '#675DA2'), ('color2_H', '#384AB4'), ('color2_L', '#6359A2')])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
    Routine study_stage
    Routine probe
    Routine feedback
  LoopTerminator calibCw
  Routine calibCw_done
  LoopInitiator calibC loopType="TrialHandler"
    loopType = sequential
    nReps = N_CALIB_TOTAL
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    conditions:
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    Routine study_stage
    Routine probe
  LoopTerminator calibC
  Routine fit_msg
  Routine fit
  Routine calibA_intro
  LoopInitiator calibAw loopType="TrialHandler"
    loopType = sequential
    nReps = N_WARMUP
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    conditions:
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    Routine study_stage
    Routine probe
    Routine feedback
  LoopTerminator calibAw
  Routine calibAw_done
  LoopInitiator calibA loopType="TrialHandler"
    loopType = sequential
    nReps = N_CALIB_TOTAL
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    conditions:
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    Routine study_stage
    Routine probe
  LoopTerminator calibA
  Routine fit_msg
  Routine fit
  Routine practice_intro
  LoopInitiator practice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = N_PRACTICE_SETS
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    conditions:
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    Routine study_stage
    LoopInitiator pinner loopType="TrialHandler"
      loopType = sequential
      nReps = 16
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      conditions:
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      Routine probe
      Routine feedback
    LoopTerminator pinner
  LoopTerminator practice
  Routine SFT_start
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = N_BLOCKS
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    conditions:
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    LoopInitiator sets loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = SETS_PER_BLOCK
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      conditions:
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      Routine study_stage
      LoopInitiator inner loopType="TrialHandler"
        loopType = sequential
        nReps = 16
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        conditions:
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        Routine probe
      LoopTerminator inner
    LoopTerminator sets
    Routine rest
  LoopTerminator blocks
  Routine End
